OpenViBE-Scenario(Creator=OpenViBE, CreatorVersion=1.3.0)

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Temporal filter "Bandpass 13 - 25Hz"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 13
  High cut frequency (Hz) = 25
  Pass band ripple (dB) = 0.5
-> Spatial Filter "global Beta"
  Spatial Filter Coefficients = 1/14;1/14;1/14;1/14;1/14;1/14;1/14;1/14;1/14;1/14;1/14;1/14;1/14;1/14
  Number of Output Channels = 1
  Number of Input Channels = 14
  Filter matrix file =
-> Simple DSP "Beta power"
  Equation = x*x
-> Signal average "filtered Beta" => #4
#0.Signal stream -> Temporal filter "Bandpass 7 - 13Hz"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 7
  High cut frequency (Hz) = 13
  Pass band ripple (dB) = 0.5
-> Spatial Filter "global Alpha"
  Spatial Filter Coefficients = 1/14;1/14;1/14;1/14;1/14;1/14;1/14;1/14;1/14;1/14;1/14;1/14;1/14;1/14
  Number of Output Channels = 1
  Number of Input Channels = 14
  Filter matrix file =
-> Simple DSP "Alpha power"
  Equation = x*x
-> Signal average "filtered Alpha" => #8
#0.Signal stream -> Temporal filter "Bandpass 4 - 7Hz"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 4
  High cut frequency (Hz) = 7
  Pass band ripple (dB) = 0.5
-> Spatial Filter "global Theta"
  Spatial Filter Coefficients = 1/14;1/14;1/14;1/14;1/14;1/14;1/14;1/14;1/14;1/14;1/14;1/14;1/14;1/14
  Number of Output Channels = 1
  Number of Input Channels = 14
  Filter matrix file =
-> Simple DSP "Theta power"
  Equation = x*x
-> Signal average "filtered Theta" => #12
Input - A=#4, Input - B=#8, Input - C=#12 -> Simple DSP "engagement index" => #13
  Equation = a/(b+c)
Input signal=#13 -> LSL Export
  Signal stream = openvibeSignal
  Marker stream = openvibeMarkers
Data=#13 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false

Acquisition client => #16
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1025
#16.Signal stream -> Temporal filter "Bandpass 13 - 25Hz"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 13
  High cut frequency (Hz) = 25
  Pass band ripple (dB) = 0.5
-> Spatial Filter "global Beta"
  Spatial Filter Coefficients = 1/14;1/14;1/14;1/14;1/14;1/14;1/14;1/14;1/14;1/14;1/14;1/14;1/14;1/14
  Number of Output Channels = 1
  Number of Input Channels = 14
  Filter matrix file =
-> Simple DSP "Beta power"
  Equation = x*x
-> Signal average "filtered Beta" => #20
#16.Signal stream -> Temporal filter "Bandpass 7 - 13Hz"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 7
  High cut frequency (Hz) = 13
  Pass band ripple (dB) = 0.5
-> Spatial Filter "global Alpha"
  Spatial Filter Coefficients = 1/14;1/14;1/14;1/14;1/14;1/14;1/14;1/14;1/14;1/14;1/14;1/14;1/14;1/14
  Number of Output Channels = 1
  Number of Input Channels = 14
  Filter matrix file =
-> Simple DSP "Alpha power"
  Equation = x*x
-> Signal average "filtered Alpha" => #24
#16.Signal stream -> Temporal filter "Bandpass 4 - 7Hz"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 4
  High cut frequency (Hz) = 7
  Pass band ripple (dB) = 0.5
-> Spatial Filter "global Theta"
  Spatial Filter Coefficients = 1/14;1/14;1/14;1/14;1/14;1/14;1/14;1/14;1/14;1/14;1/14;1/14;1/14;1/14
  Number of Output Channels = 1
  Number of Input Channels = 14
  Filter matrix file =
-> Simple DSP "Theta power"
  Equation = x*x
-> Signal average "filtered Theta" => #28
Input - A=#20, Input - B=#24, Input - C=#28 -> Simple DSP "engagement index" => #29
  Equation = a/(b+c)
Input signal=#29 -> 0xc67a01dc LSL Export
  Signal stream = openvibeSignal
  Marker stream = openvibeMarkers
Data=#29 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
